PsychoPy2experiment version="2021.1.3"
Settings
  Audio latency priority = Use prefs
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = response
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Routines
  Routine trial
    ImageComponent image
      image = /home/eladzlot/www/minnojs-timing/psychopy/response/img/white.png
      size = (0.5, 0.5)
      startVal [time (s)] = .3
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    KeyboardComponent key_resp
      allowedKeys = 'space','e'
      forceEndRoutine = True
      startEstim = .3
      startVal [time (s)] = 0
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  Routine initBlank
    TextComponent text
      durationEstim = 5
      letterHeight = 0.04
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 300
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      text:
        Welcome to the response timing experiment. Press space to begin.
    KeyboardComponent key_resp_3
      allowedKeys = 'space','e'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine initBlank
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 1000
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    Routine trial
  LoopTerminator trials
