PsychoPy2experiment version="2021.1.3"
<!--     <Param name="Save csv file" val="False" valType="bool" updates="None"/>
    <Param name="Save excel file" val="False" valType="bool" updates="None"/>
    <Param name="Save log file" val="True" valType="bool" updates="None"/>
    <Param name="Save psydat file" val="True" valType="bool" updates="None"/>
    <Param name="Save wide csv file" val="True" valType="bool" updates="None"/> -->
Settings
  Audio latency priority = Use prefs
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = psychopy2020stimTiming
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Routines
  Routine trial
    ImageComponent image
      image = img/white.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.2
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  Routine initBlank
    TextComponent text
      durationEstim = 5
      letterHeight = 0.04
      startEstim = 0
      startVal [frame N] = 0
      stopVal [condition] = 0 == 1
      text = Welcome to the stimulus timing task, please press any key to continue.
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine finalBlank
    TextComponent endText
      durationEstim = 5
      letterHeight = 0.1
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 300
      text = +
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Flow
  Routine initBlank
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 1000
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    Routine trial
  LoopTerminator trials
